PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = cal_abstract
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Routines
  Routine Start
    TextComponent start_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Start screen
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    KeyboardComponent start_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = End Screen
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    KeyboardComponent end_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Block1
    ImageComponent image1
      image [set every repeat] = $Stim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent text1
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = Left or Right
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    KeyboardComponent key_resp1
      allowedKeys = 'left','right'
      correctAns = $Corr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Feedback1
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if key_resp1.keys == Corr:
            trialFeedback = 'Correct!'
            trialBinary = 1
        else:
            trialFeedback = 'Incorrect'
            trialBinary = 0

        Block1_loop.addData('trialCorrect', trialBinary)
    TextComponent feedback_text1
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $trialFeedback
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Flow
  Routine Start
  LoopInitiator Block1_loop loopType="TrialHandler"
    conditionsFile = blocks/Block1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Type', 'Fix2'), ('Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Healthy/healthy_66.jpg'), ('Corr', 'left')]),
      OrderedDict([('Type', 'Dim'), ('Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Temperature/47_R.jpg'), ('Corr', 'left')]),
      OrderedDict([('Type', 'Dim'), ('Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Temperature/4_Low.jpg'), ('Corr', 'right')]),
      OrderedDict([('Type', 'Fix1'), ('Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/School/ruler.jpg'), ('Corr', 'right')]),
      OrderedDict([('Type', 'Cond'), ('Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Small/ladybug.jpg'), ('Corr', 'left')]),
      OrderedDict([('Type', 'Fix1'), ('Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/School/crayons.jpg'), ('Corr', 'right')]),
      OrderedDict([('Type', 'Cond'), ('Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Small/game pieces.jpg'), ('Corr', 'left')]),
      OrderedDict([('Type', 'Fix1'), ('Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/School/telephone.jpg'), ('Corr', 'right')]),
      OrderedDict([('Type', 'Cond'), ('Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Small/skittles.jpg'), ('Corr', 'left')]),
      OrderedDict([('Type', 'Cond'), ('Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/Small/stamps.jpg'), ('Corr', 'right')]),
      OrderedDict([('Type', 'Fix1'), ('Stim', '/Users/nmuncy/Projects/cal_abstract/stimuli/School/basketball.jpg'), ('Corr', 'right')])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
    Routine Block1
    Routine Feedback1
  LoopTerminator Block1_loop
  Routine End
